PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = memory_task
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to our experiment!
        In this task, you will be shown digits to remember.
        After viewing, you will be asked to recall the digits in the same order.

        Press any key to start.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    TextComponent digit_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $digit_display.text
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    CodeComponent trial_logic
      Code Type = Py
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      Begin Experiment:
        # Import necessary libraries
        from psychopy import core
        import os

        from psychopy.iohub import launchHubServer
        iohub = launchHubServer(port=9040)

        # Global variables
        trialList = data.importConditions(r'C:\Users\ANOUSHKA\Desktop\srm2\conditions.xlsx')
        enter_pressed = False  # Variable to track whether Enter has been pressed
        time_elapsed = 0  # Initialize time_elapsed for sequential digit presentation

        expInfo = {"participant": "001", "session": "001"}  # Defaults
        dlg = gui.DlgFromDict(dictionary=expInfo, title="Experiment Info")
        if not dlg.OK:
            core.quit()  # Exit if the participant cancels
      Begin Routine:
        # Sequential presentation logic
        digits_list = [d for d in digits if d.isdigit()]  # Clean digits list by ensuring only digits are included

        if presentation_type == "sequential":
            # Define the duration for each digit display (e.g., 1 second per digit)
            digit_duration = 1  # Duration for each digit to be shown

            # Initialize time_elapsed to track how much time has passed
            if 'time_elapsed' not in globals():
                time_elapsed = 0  # Initialize time_elapsed if not already defined

            # Update the time elapsed by adding the time passed since the last frame
            time_elapsed += frameDur  # Use frameDur (time passed between frames)

            # Calculate the index of the current digit to be displayed
            digit_index = int(time_elapsed // digit_duration)  # Determine the digit to display

            # Display the current digit (only if within bounds)
            if digit_index < len(digits_list):
                digit_display.text = digits_list[digit_index]  # Update text with the current digit
                digit_display.setAutoDraw(True)  # Ensure the text is drawn
            else:
                digit_display.setAutoDraw(False)  # Stop drawing once all digits are shown
                continueRoutine = False  # End the routine after all digits are shown

            # Debugging: Print out variables for tracking
            print(f"Time: {t}, Time Elapsed: {time_elapsed}, Digit Index: {digit_index}, Digits List: {digits_list}")

        # For Simultaneous presentation
        if presentation_type == "simultaneous":
            # Join digits to create a space-separated string (e.g., '1 2 3')
            display_text = ' '.join(digits_list)  # Convert digits into a space-separated string
            digit_duration = 3  # Show digits for 5 seconds (adjustable based on your design)
            print(f"Simultaneous Mode: Displaying digits '{display_text}' for {digit_duration} seconds")
      Each Frame:
        # Sequential presentation logic
        if presentation_type == "sequential":
            # Define the duration for each digit display (1 second per digit)
            digit_duration = 1

            # Ensure the digits list is cleaned and contains only digits (remove any quotes or non-numeric characters)
            digits_list = [d for d in digits if d.isdigit()]  # Clean digits list by ensuring only digits are included

            # Update time_elapsed by accumulating time between frames
            time_elapsed += frameDur  # frameDur is the time passed between frames

            # Calculate the index of the current digit to be displayed
            digit_index = int(time_elapsed // digit_duration)

            # Display the current digit only if within bounds
            if digit_index < len(digits_list):
                digit_display.text = digits_list[digit_index]  # Update text with the current digit
                digit_display.setAutoDraw(True)  # Ensure the text is drawn on the screen
            else:
                digit_display.setAutoDraw(False)  # Stop drawing after all digits are shown
                continueRoutine = False  # End the routine after all digits have been shown

            # Debugging: Print out the variables for tracking
            print(f"Time: {t}, Time Elapsed: {time_elapsed}, Digit Index: {digit_index}, Digits List: {digits_list}")

        # Simultaneous presentation logic
        elif presentation_type == "simultaneous":
            # Join the digits into a space-separated string for simultaneous display
            display_text = ' '.join(digits_list)  # Join the digits with spaces
            digit_display.text = display_text  # Display all digits at once
            digit_display.setAutoDraw(True)  # Ensure the digits are displayed
            win.flip()  # Show the digits on the screen
            core.wait(digit_duration)  # Wait for the duration of the simultaneous presentation
            digit_display.setAutoDraw(False)  # Stop drawing the digits after the time is up
            continueRoutine = False  # End the routine after the simultaneous presentation
      End Routine:
        # End the trial routine when trial_end_time is reached
        if t >= digit_duration:
            continueRoutine = False
  Routine recall
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    TextboxComponent response_box
      bold = False
      color = -1.0000, 1.0000, 1.0000
      editable = True
      font = Georgia
      letterHeight = 0.05
      placeholder = Type the numbers you saw..
      size = (0.8, 0.8)
      startVal [time (s)] = 0.1
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    CodeComponent recall_logic
      Code Type = Py
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      Begin Routine:
        response_box.editable = True  # Initially make the response box non-editable
        response_start_time = 1  # Time when the response box should become editable

        # Example response duration (can be dynamically set depending on the condition)
        response_duration = 15

        # Initialize enter_pressed at the beginning of the routine
        enter_pressed = False
      Each Frame:
        # Ensure the Response Box is editable
        response_box.editable = True

        # Finalize response when Enter is pressed or timeout occurs
        if response_box.text.endswith("\n"):  # Check for Enter key (newline character)
            participant_response = response_box.text.strip()[:-1]  # Remove newline
            print(f"Participant Response: {participant_response}")  # Debugging
            continueRoutine = False  # End the response routine

        elif t >= response_duration:  # Timeout logic
            participant_response = response_box.text.strip()  # Capture the response
            print(f"Participant Response (timeout): {participant_response}")  # Debugging
            continueRoutine = False  # End the response routine
      End Routine:
        # Gather participant response and calculate accuracy
        participant_response = response_box.text.strip() if response_box.text else ""  # Handle empty response gracefully
        correct_digits = digits  # Presented digits

        # Calculate accuracy
        if len(correct_digits) > 0 and len(participant_response) > 0:
            num_correct = sum(1 for p, c in zip(participant_response, correct_digits) if p == c)
            accuracy = (num_correct / len(correct_digits)) * 100
        else:
            num_correct = 0
            accuracy = 0  # No input or no digits presented results in 0% accuracy

        # Save data
        thisExp.addData("Presented Digits", correct_digits)
        thisExp.addData("Participant Response", participant_response)
        thisExp.addData("Accuracy (%)", accuracy)

        print(f"Participant Response: {participant_response}")  # Debugging: Log the response
  Routine feedback
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    CodeComponent feedback_logic
      Code Type = Py
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      Begin Experiment:
        feedback_text = ""  # Initialize feedback_text as an empty string
      Begin Routine:
        # Ensure the response and correct digits are strings for proper comparison
        participant_response = response_box.text.strip() if response_box.text else ""  # Handle empty response gracefully
        correct_digits = str(digits)  # Ensure digits are converted to a string

        # Debugging: Print the inputs for validation
        print(f"Participant Response: {participant_response}")
        print(f"Correct Digits: {correct_digits}")

        # Calculate accuracy
        if len(correct_digits) > 0 and len(participant_response) > 0:
            # Compare each character in participant_response with correct_digits
            num_correct = sum(1 for p, c in zip(participant_response, correct_digits) if p == c)
            accuracy = (num_correct / len(correct_digits)) * 100
        else:
            num_correct = 0
            accuracy = 0  # Default to 0% accuracy if no valid input

        # Debugging: Print the results for verification
        print(f"Num Correct: {num_correct}")
        print(f"Accuracy: {accuracy:.2f}%")

        # Add the feedback text
        feedback_text = f"Your accuracy was: {accuracy:.2f}%" if len(correct_digits) > 0 else "No accuracy data available."
        print(f"Feedback Text: {feedback_text}")
    TextComponent text_2
      color = -1.0000, 0.9608, 0.2078
      font = Garamond
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text [set every repeat]:
        $feedback_text
  Routine thankyou
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    TextComponent text_3
      color = 0.8824, 0.0039, 0.0039
      font = Cochin
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!
        You may not love your memory but we love to remember you :)

        Press enter to end your experiment
    KeyboardComponent key_resp_2
      allowedKeys = 'enter'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'memory_load': 'low', 'presentation_type': 'sequential', 'digits': '"123"'},
      {'memory_load': 'low', 'presentation_type': 'simultaneous', 'digits': '"456"'},
      {'memory_load': 'high', 'presentation_type': 'sequential', 'digits': '"7894569"'},
      {'memory_load': 'high', 'presentation_type': 'simultaneous', 'digits': '"1427893"'},
      {'memory_load': 'low', 'presentation_type': 'sequential', 'digits': '"629"'},
      {'memory_load': 'low', 'presentation_type': 'simultaneous', 'digits': '"541"'},
      {'memory_load': 'high', 'presentation_type': 'sequential', 'digits': '"6713549"'},
      {'memory_load': 'high', 'presentation_type': 'simultaneous', 'digits': '"6841573"'},
      {'memory_load': 'low', 'presentation_type': 'sequential', 'digits': '"803"'},
      {'memory_load': 'low', 'presentation_type': 'simultaneous', 'digits': '"128"'},
      {'memory_load': 'high', 'presentation_type': 'sequential', 'digits': '"4217980"'},
      {'memory_load': 'high', 'presentation_type': 'simultaneous', 'digits': '"1529459"'}]
    Routine trial
    Routine recall
  LoopTerminator trials
  Routine feedback
  Routine thankyou
